<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.2.1">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q4="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>0</q1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Crop">
          <q2:RegionOfInterest>
            <q2:X>530</q2:X>
            <q2:Y>661</q2:Y>
            <q2:Width>142</q2:Width>
            <q2:Height>131</q2:Height>
          </q2:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TriggeredWindow">
          <Count xsi:nil="true" />
          <TimeSpan>PT11S</TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Pupil Video</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:VideoWriter">
                <q2:FileName>C:\Users\Adam\BpodUser\Data\DC_56\lickNoLick_Odor_v2\Session Data\Combined_180922\Pupil_.avi</q2:FileName>
                <q2:Suffix>FileCount</q2:Suffix>
                <q2:Buffered>true</q2:Buffered>
                <q2:Overwrite>true</q2:Overwrite>
                <q2:FourCC>FMP4</q2:FourCC>
                <q2:FrameRate>60</q2:FrameRate>
                <q2:FrameSize>
                  <q2:Width>0</q2:Width>
                  <q2:Height>0</q2:Height>
                </q2:FrameSize>
                <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:GpioPinState" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:Average" />
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Buffer">
          <Count>2</Count>
          <Skip>1</Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Buffer">
          <Count>2</Count>
          <Skip>1</Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Whisk Video</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:VideoWriter">
                <q2:FileName>C:\Users\Adam\BpodUser\Data\DC_56\lickNoLick_Odor_v2\Session Data\Combined_180922\Whisk_.avi</q2:FileName>
                <q2:Suffix>FileCount</q2:Suffix>
                <q2:Buffered>true</q2:Buffered>
                <q2:Overwrite>true</q2:Overwrite>
                <q2:FourCC>FMP4</q2:FourCC>
                <q2:FrameRate>60</q2:FrameRate>
                <q2:FrameSize>
                  <q2:Width>0</q2:Width>
                  <q2:Height>0</q2:Height>
                </q2:FrameSize>
                <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TriggeredWindow">
          <Count xsi:nil="true" />
          <TimeSpan>PT11S</TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Crop">
          <q2:RegionOfInterest>
            <q2:X>389</q2:X>
            <q2:Y>211</q2:Y>
            <q2:Width>498</q2:Width>
            <q2:Height>144</q2:Height>
          </q2:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>1</q1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:GpioPinState" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TriggeredWindow">
          <Count xsi:nil="true" />
          <TimeSpan>PT11S</TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Whisk Diff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="q4:CsvWriter">
              <q4:FileName>C:\Users\Adam\BpodUser\Data\DC_56\lickNoLick_Odor_v2\Session Data\Combined_180922\WhiskDiff_.csv</q4:FileName>
              <q4:Append>false</q4:Append>
              <q4:Overwrite>true</q4:Overwrite>
              <q4:Suffix>FileCount</q4:Suffix>
              <q4:IncludeHeader>false</q4:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>3</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>27</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>18</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>27</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>12</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>27</From>
        <To>28</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TriggeredWindow, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.GpioPinState, Bonsai.PointGrey, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DistinctUntilChanged, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Average, Bonsai.Dsp, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MultiplyBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Buffer, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>