<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.2.1">
  <Workflow xmlns:q1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>0</q1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Crop">
          <q2:RegionOfInterest>
            <q2:X>825</q2:X>
            <q2:Y>352</q2:Y>
            <q2:Width>135</q2:Width>
            <q2:Height>150</q2:Height>
          </q2:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TriggeredWindow">
          <Count xsi:nil="true" />
          <TimeSpan>PT10S</TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:VideoWriter">
                <q2:FileName>C:\Users\Adam\BpodUser\Data\ChAT_70\FrankenLNL_4odors\Session Data\Pupil_190207\Pupil_.avi</q2:FileName>
                <q2:Suffix>FileCount</q2:Suffix>
                <q2:Buffered>true</q2:Buffered>
                <q2:Overwrite>true</q2:Overwrite>
                <q2:FourCC>FMP4</q2:FourCC>
                <q2:FrameRate>60</q2:FrameRate>
                <q2:FrameSize>
                  <q2:Width>0</q2:Width>
                  <q2:Height>0</q2:Height>
                </q2:FrameSize>
                <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:GpioPinState" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>3</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TriggeredWindow, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.GpioPinState, Bonsai.PointGrey, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DistinctUntilChanged, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>